# Authored by Johan Blomberg and Gustav Grännsjö

[General settings]

# The name is shown in all the configuration windows
name: Vivace Pulse Sequencer

# The version string
version: 1.3.4

# Name of folder containing the code defining a custom driver
driver_path: Vivace_Pulse_Sequencer

signal_generator: False

signal_analyzer: False

interface: TCPIP

###############################
### CUSTOM VARIABLES ##########
###############################

[Custom variable 1 - name]
label: Name
datatype: STRING
group: Custom variable 1
section: Custom variables
def_value: v1
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

[Custom variable 1 - value]
label: Value
datatype: DOUBLE
group: Custom variable 1
section: Custom variables

[Custom variable 2 - name]
label: Name
datatype: STRING
group: Custom variable 2
section: Custom variables
def_value: v2
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

[Custom variable 2 - value]
label: Value
datatype: DOUBLE
group: Custom variable 2
section: Custom variables

[Custom variable 3 - name]
label: Name
datatype: STRING
group: Custom variable 3
section: Custom variables
def_value: v3
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

[Custom variable 3 - value]
label: Value
datatype: DOUBLE
group: Custom variable 3
section: Custom variables

[Custom variable 4 - name]
label: Name
datatype: STRING
group: Custom variable 4
section: Custom variables
def_value: v4
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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

[Custom variable 5 - name]
label: Name
datatype: STRING
group: Custom variable 5
section: Custom variables
def_value: v5
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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

[Custom variable 6 - name]
label: Name
datatype: STRING
group: Custom variable 6
section: Custom variables
def_value: v6
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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

[Custom variable 7 - name]
label: Name
datatype: STRING
group: Custom variable 7
section: Custom variables
def_value: v7
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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

[Custom variable 8 - name]
label: Name
datatype: STRING
group: Custom variable 8
section: Custom variables
def_value: v8
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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

[Custom variable 9 - name]
label: Name
datatype: STRING
group: Custom variable 9
section: Custom variables
def_value: v9
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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

[Custom variable 10 - name]
label: Name
datatype: STRING
group: Custom variable 10
section: Custom variables
def_value: v10
tooltip: Variable names can only contain alphanumeric characters and underscores, and cannot start with a digit.
set_cmd: var_name

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### TEMPLATES #################
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

[Envelope template count]
label: No. of envelope templates
datatype: COMBO
group: General
section: Envelopes
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15

[Envelope template 1: shape]
label: Envelope shape
datatype: COMBO
group: Envelope template 1
section: Envelopes
combo_def_1: Square
combo_def_2: Long drive
combo_def_3: Sin2
combo_def_4: SinP
combo_def_5: Sinc
combo_def_6: Triangle
combo_def_7: Gaussian
combo_def_8: Cool
combo_def_9: Custom 1
combo_def_10: Custom 2
combo_def_11: Custom 3
combo_def_12: Custom 4
combo_def_13: Custom 5
combo_def_14: Custom 6
combo_def_15: Custom 7
combo_def_16: Custom 8
state_quant: Envelope template count
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15

[Envelope template 1: sinP Value]
label: P
datatype: DOUBLE
group: Envelope template 1
section: Envelopes
low_lim: 0
state_quant: Envelope template 1: shape
state_value_1: SinP

[Envelope template 1: sinc cutoff]
label: Cutoff
datatype: DOUBLE
group: Envelope template 1
section: Envelopes
unit: PI
def_value: 4
low_lim: 1e-09
state_quant: Envelope template 1: shape
state_value_1: Sinc
tooltip: The sinc wave will be defined from -x*PI to +x*PI

[Envelope template 1: gaussian truncation]
label: Truncate at x*sigma
datatype: DOUBLE
group: Envelope template 1
section: Envelopes
def_value: 2
low_lim: 1e-09
state_quant: Envelope template 1: shape
state_value_1: Gaussian

[Envelope template 1: duration]
label: Duration
datatype: DOUBLE
group: Envelope template 1
section: Envelopes
unit: s
state_quant: Envelope template 1: shape
state_value_1: Square
state_value_2: Sin2
state_value_3: SinP
state_value_4: Sinc
state_value_5: Triangle
state_value_6: Gaussian
state_value_7: Cool
state_value_8: Custom 1
state_value_9: Custom 2
state_value_10: Custom 3
state_value_11: Custom 4
state_value_12: Custom 5
state_value_13: Custom 6
state_value_14: Custom 7
state_value_15: Custom 8
low_lim: 1e-09
high_lim: 1e-05
def_value: 1e-09

[Envelope template 1: use zero-padding]
label: Use zero-padding
datatype: BOOLEAN
group: Envelope template 1
section: Envelopes
state_quant: Envelope template 1: shape
state_value_1: Square
state_value_2: Sin2
state_value_3: SinP
state_value_4: Sinc
state_value_5: Triangle
state_value_6: Gaussian
state_value_7: Cool
state_value_8: Custom 1
state_value_9: Custom 2
state_value_10: Custom 3
state_value_11: Custom 4
state_value_12: Custom 5
state_value_13: Custom 6
state_value_14: Custom 7
state_value_15: Custom 8
tooltip: Lets you "shift" the template's start time by adding up to 2ns of leading zeroes to it.

[Envelope template 1: padding length]
label: Padding length
datatype: DOUBLE
group: Envelope template 1
section: Envelopes
unit: ns
state_quant: Envelope template 1: use zero-padding
state_value_1: True
low_lim: 0
high_lim: 1.75
def_value: 1
set_cmd: quarter_value

[Envelope template 1: long drive duration]
label: Duration
datatype: STRING
group: Envelope template 1
section: Envelopes
unit: s
set_cmd: time_string
tooltip: Example: 100E6 + 50E6*i
def_value: 0 + 0*i
state_quant: Envelope template 1: shape
state_value_1: Long drive

[Envelope template 1: use gaussian rise and fall]
label: Use gaussian rise and fall
datatype: BOOLEAN
group: Envelope template 1
section: Envelopes
state_quant: Envelope template 1: shape
state_value_1: Long drive

[Envelope template 1: gaussian rise and fall duration]
label: Rise and fall duration
datatype: DOUBLE
group: Envelope template 1
section: Envelopes
tooltip: Both the rise and the fall have this duration, and they are placed within the total duration of the pulse.
low_lim: 1e-09
def_value: 1e-08
state_quant: Envelope template 1: use gaussian rise and fall
state_value_1: True

[Envelope template 2: shape]
label: Envelope shape
datatype: COMBO
group: Envelope template 2
section: Envelopes
combo_def_1: Square
combo_def_2: Long drive
combo_def_3: Sin2
combo_def_4: SinP
combo_def_5: Sinc
combo_def_6: Triangle
combo_def_7: Gaussian
combo_def_8: Cool
combo_def_9: Custom 1
combo_def_10: Custom 2
combo_def_11: Custom 3
combo_def_12: Custom 4
combo_def_13: Custom 5
combo_def_14: Custom 6
combo_def_15: Custom 7
combo_def_16: Custom 8
state_quant: Envelope template count
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15

[Envelope template 2: sinP Value]
label: P
datatype: DOUBLE
group: Envelope template 2
section: Envelopes
low_lim: 0
state_quant: Envelope template 2: shape
state_value_1: SinP

[Envelope template 2: sinc cutoff]
label: Cutoff
datatype: DOUBLE
group: Envelope template 2
section: Envelopes
unit: PI
def_value: 4
low_lim: 1e-09
state_quant: Envelope template 2: shape
state_value_1: Sinc
tooltip: The sinc wave will be defined from -x*PI to +x*PI

[Envelope template 2: gaussian truncation]
label: Truncate at x*sigma
datatype: DOUBLE
group: Envelope template 2
section: Envelopes
def_value: 2
low_lim: 1e-09
state_quant: Envelope template 2: shape
state_value_1: Gaussian

[Envelope template 2: duration]
label: Duration
datatype: DOUBLE
group: Envelope template 2
section: Envelopes
unit: s
state_quant: Envelope template 2: shape
state_value_1: Square
state_value_2: Sin2
state_value_3: SinP
state_value_4: Sinc
state_value_5: Triangle
state_value_6: Gaussian
state_value_7: Cool
state_value_8: Custom 1
state_value_9: Custom 2
state_value_10: Custom 3
state_value_11: Custom 4
state_value_12: Custom 5
state_value_13: Custom 6
state_value_14: Custom 7
state_value_15: Custom 8
low_lim: 1e-09
high_lim: 1e-05
def_value: 1e-09

[Envelope template 2: use zero-padding]
label: Use zero-padding
datatype: BOOLEAN
group: Envelope template 2
section: Envelopes
state_quant: Envelope template 2: shape
state_value_1: Square
state_value_2: Sin2
state_value_3: SinP
state_value_4: Sinc
state_value_5: Triangle
state_value_6: Gaussian
state_value_7: Cool
state_value_8: Custom 1
state_value_9: Custom 2
state_value_10: Custom 3
state_value_11: Custom 4
state_value_12: Custom 5
state_value_13: Custom 6
state_value_14: Custom 7
state_value_15: Custom 8
tooltip: Lets you "shift" the template's start time by adding up to 2ns of leading zeroes to it.

[Envelope template 2: padding length]
label: Padding length
datatype: DOUBLE
group: Envelope template 2
section: Envelopes
unit: ns
state_quant: Envelope template 2: use zero-padding
state_value_1: True
low_lim: 0
high_lim: 1.75
def_value: 1
set_cmd: quarter_value

[Envelope template 2: long drive duration]
label: Duration
datatype: STRING
group: Envelope template 2
section: Envelopes
unit: s
set_cmd: time_string
tooltip: Example: 100E6 + 50E6*i
def_value: 0 + 0*i
state_quant: Envelope template 2: shape
state_value_1: Long drive

[Envelope template 2: use gaussian rise and fall]
label: Use gaussian rise and fall
datatype: BOOLEAN
group: Envelope template 2
section: Envelopes
state_quant: Envelope template 2: shape
state_value_1: Long drive

[Envelope template 2: gaussian rise and fall duration]
label: Rise and fall duration
datatype: DOUBLE
group: Envelope template 2
section: Envelopes
tooltip: Both the rise and the fall have this duration, and they are placed within the total duration of the pulse.
low_lim: 1e-09
def_value: 1e-08
state_quant: Envelope template 2: use gaussian rise and fall
state_value_1: True

[Envelope template 3: shape]
label: Envelope shape
datatype: COMBO
group: Envelope template 3
section: Envelopes
combo_def_1: Square
combo_def_2: Long drive
combo_def_3: Sin2
combo_def_4: SinP
combo_def_5: Sinc
combo_def_6: Triangle
combo_def_7: Gaussian
combo_def_8: Cool
combo_def_9: Custom 1
combo_def_10: Custom 2
combo_def_11: Custom 3
combo_def_12: Custom 4
combo_def_13: Custom 5
combo_def_14: Custom 6
combo_def_15: Custom 7
combo_def_16: Custom 8
state_quant: Envelope template count
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15

[Envelope template 3: sinP Value]
label: P
datatype: DOUBLE
group: Envelope template 3
section: Envelopes
low_lim: 0
state_quant: Envelope template 3: shape
state_value_1: SinP

[Envelope template 3: sinc cutoff]
label: Cutoff
datatype: DOUBLE
group: Envelope template 3
section: Envelopes
unit: PI
def_value: 4
low_lim: 1e-09
state_quant: Envelope template 3: shape
state_value_1: Sinc
tooltip: The sinc wave will be defined from -x*PI to +x*PI

[Envelope template 3: gaussian truncation]
label: Truncate at x*sigma
datatype: DOUBLE
group: Envelope template 3
section: Envelopes
def_value: 2
low_lim: 1e-09
state_quant: Envelope template 3: shape
state_value_1: Gaussian

[Envelope template 3: duration]
label: Duration
datatype: DOUBLE
group: Envelope template 3
section: Envelopes
unit: s
state_quant: Envelope template 3: shape
state_value_1: Square
state_value_2: Sin2
state_value_3: SinP
state_value_4: Sinc
state_value_5: Triangle
state_value_6: Gaussian
state_value_7: Cool
state_value_8: Custom 1
state_value_9: Custom 2
state_value_10: Custom 3
state_value_11: Custom 4
state_value_12: Custom 5
state_value_13: Custom 6
state_value_14: Custom 7
state_value_15: Custom 8
low_lim: 1e-09
high_lim: 1e-05
def_value: 1e-09

[Envelope template 3: use zero-padding]
label: Use zero-padding
datatype: BOOLEAN
group: Envelope template 3
section: Envelopes
state_quant: Envelope template 3: shape
state_value_1: Square
state_value_2: Sin2
state_value_3: SinP
state_value_4: Sinc
state_value_5: Triangle
state_value_6: Gaussian
state_value_7: Cool
state_value_8: Custom 1
state_value_9: Custom 2
state_value_10: Custom 3
state_value_11: Custom 4
state_value_12: Custom 5
state_value_13: Custom 6
state_value_14: Custom 7
state_value_15: Custom 8
tooltip: Lets you "shift" the template's start time by adding up to 2ns of leading zeroes to it.

[Envelope template 3: padding length]
label: Padding length
datatype: DOUBLE
group: Envelope template 3
section: Envelopes
unit: ns
state_quant: Envelope template 3: use zero-padding
state_value_1: True
low_lim: 0
high_lim: 1.75
def_value: 1
set_cmd: quarter_value

[Envelope template 3: long drive duration]
label: Duration
datatype: STRING
group: Envelope template 3
section: Envelopes
unit: s
set_cmd: time_string
tooltip: Example: 100E6 + 50E6*i
def_value: 0 + 0*i
state_quant: Envelope template 3: shape
state_value_1: Long drive

[Envelope template 3: use gaussian rise and fall]
label: Use gaussian rise and fall
datatype: BOOLEAN
group: Envelope template 3
section: Envelopes
state_quant: Envelope template 3: shape
state_value_1: Long drive

[Envelope template 3: gaussian rise and fall duration]
label: Rise and fall duration
datatype: DOUBLE
group: Envelope template 3
section: Envelopes
tooltip: Both the rise and the fall have this duration, and they are placed within the total duration of the pulse.
low_lim: 1e-09
def_value: 1e-08
state_quant: Envelope template 3: use gaussian rise and fall
state_value_1: True

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### SWEEPABLE PULSE (and more...) 
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

[Average]
label: Number of averages
datatype: DOUBLE
group: Settings
section: General settings
low_lim: 1
def_value: 1
set_cmd: int
show_in_measurement_dlg: True 

[Trigger period]
label: Trigger period
datatype: DOUBLE
group: Settings
section: General settings
low_lim: 0
def_value: 0.0002
show_in_measurement_dlg: True 

[Iterations]
label: Iterations
datatype: DOUBLE
group: Settings
section: General settings
low_lim: 1
def_value: 1
set_cmd: int
show_in_measurement_dlg: True 

[Index of displayed time trace - iteration]
label: Iteration
datatype: DOUBLE
group: Time trace output selection
section: General settings
def_value: 1
low_lim: 1
tooltip: Which measurement iteration to output a trace for.
set_cmd: int, not_affecting_board
show_in_measurement_dlg: True 

[Index of displayed time trace - sample pulse]
label: Sampling pulse
datatype: DOUBLE
group: Time trace output selection
section: General settings
def_value: 1
low_lim: 1
tooltip: Which sampling pulse in the given iteration to output a time trace for.
set_cmd: int, not_affecting_board
show_in_measurement_dlg: True 

###############################
### Pulse definitions - Port 1 
###############################

[Port 1 - mode]
label: Mode
datatype: COMBO
group: General
section: Port 1 sequence
combo_def_1: Disabled
combo_def_2: Define
combo_def_3: Copy

[Port 1 - copy sequence from]
label: Copy from port
datatype: COMBO
group: General
section: Port 1 sequence
combo_def_1: 2
combo_def_2: 3
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
combo_def_7: 8
state_quant: Port 1 - mode
state_value_1: Copy

[Port 1 - phase shift]
label: Phase shift
datatype: DOUBLE
group: General
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - mode
state_value_1: Copy

[Port 1 - amplitude scale multiplier]
label: Amplitude scale multiplier
datatype: DOUBLE
group: General
section: Port 1 sequence
def_value: 1
state_quant: Port 1 - mode
state_value_1: Copy

[Port 1 - DC bias]
label: DC bias
datatype: DOUBLE
group: General
section: Port 1 sequence
low_lim: -0.05
high_lim: 0.05
unit: V
tooltip: Range -50mV to +50mV
state_quant: Port 1 - mode
state_value_1: Copy
state_value_2: Define
### Number of pulses for port 1 

[Pulses for port 1]
label: Number of unique pulses
datatype: COMBO
group: General
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
state_quant: Port 1 - mode
state_value_1: Define

[Port 1 - def 1 - template]
label: Envelope
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
state_quant: Pulses for port 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

[Port 1 - def 1 - repeat count]
label: Pulse repeat count
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
set_cmd: int
def_value: 1
low_lim: 1
state_quant: Pulses for port 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

[Port 1 - def 1 - start times]
label: Start times
datatype: STRING
group: Pulse definition 1
section: Port 1 sequence
set_cmd: time_string, list
unit: s
def_value: 0 + 0*i
tooltip: Example: 100E6 + 50E6*i, 700E6, ...
state_quant: Pulses for port 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

[Port 1 - def 1 - sine generator]
label: Sine generator (DRAG)
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: DRAG
combo_def_4: None
state_quant: Pulses for port 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16
tooltip: Choose which sine generator to output this pulse on, or configure DRAG over both. If set to None, the Frequency and Phase parameters will have no effect on this pulse.

[Port 1 - def 1 - DRAG sibling port]
label: DRAG sibling port
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: 2
combo_def_2: 3
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
combo_def_7: 8
state_quant: Port 1 - def 1 - sine generator
state_value_1: DRAG

[Port 1 - def 1 - DRAG phase shift]
label: Sibling phase shift
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - def 1 - sine generator
state_value_1: DRAG

[Port 1 - def 1 - DRAG scale]
label: DRAG scale
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
def_value: 1e-09
unit: s
state_quant: Port 1 - def 1 - sine generator
state_value_1: DRAG

[Port 1 - def 1 - DRAG detuning frequency]
label: DRAG detuning frequency
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
unit: Hz
low_lim: 0
state_quant: Port 1 - def 1 - sine generator
state_value_1: DRAG

[Port 1 - def 1 - Sweep param]
label: Sweepable parameter
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: None
combo_def_2: Amplitude scale
combo_def_3: Carrier frequency
combo_def_4: Phase
state_quant: Port 1 - def 1 - sine generator
state_value_1: 1
state_value_2: 2
state_value_3: DRAG
state_value_4: None

[Port 1 - def 1 - amp]
label: Amplitude scale
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
low_lim: -1
high_lim: 1
def_value: 1
state_quant: Port 1 - def 1 - Sweep param
state_value_1: None
state_value_2: Carrier frequency
state_value_3: Phase

[Port 1 - def 1 - freq]
label: Carrier frequency
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
unit: Hz
low_lim: 0
high_lim: 2000000000.0
state_quant: Port 1 - def 1 - Sweep param
state_value_1: None
state_value_2: Amplitude scale
state_value_3: Phase

[Port 1 - def 1 - phase]
label: Phase
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - def 1 - Sweep param
state_value_1: None
state_value_2: Amplitude scale
state_value_3: Carrier frequency

[Port 1 - def 1 - Sweep format]
label: Sweep format
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: Linear: Start-End
combo_def_2: Linear: Center-Span
combo_def_3: Custom
state_quant: Port 1 - def 1 - Sweep param
state_value_1: Amplitude scale
state_value_2: Carrier frequency
state_value_3: Phase

[Port 1 - def 1 - Sweep linear start]
label: Start
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
state_quant: Port 1 - def 1 - Sweep format
state_value_1: Linear: Start-End

[Port 1 - def 1 - Sweep linear end]
label: End
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
state_quant: Port 1 - def 1 - Sweep format
state_value_1: Linear: Start-End

[Port 1 - def 1 - Sweep linear center]
label: Center
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
state_quant: Port 1 - def 1 - Sweep format
state_value_1: Linear: Center-Span

[Port 1 - def 1 - Sweep linear span]
label: Span
datatype: DOUBLE
group: Pulse definition 1
section: Port 1 sequence
state_quant: Port 1 - def 1 - Sweep format
state_value_1: Linear: Center-Span

[Port 1 - def 1 - Sweep custom steps]
label: Step values
datatype: STRING
group: Pulse definition 1
section: Port 1 sequence
tooltip: Separate with comma
set_cmd: number_string, list
state_quant: Port 1 - def 1 - Sweep format
state_value_1: Custom

[Port 1 - def 1 - Template matching condition 1]
label: Matching condition 1
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
tooltip: This pulse will only be outputted if the selected template matching yields a positive result.
state_quant: Pulses for port 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

[Port 1 - def 1 - Template matching condition 1 quadrature]
label: Condition 1 - quadrature
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: I
combo_def_2: Q
state_quant: Port 1 - def 1 - Template matching condition 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Port 1 - def 1 - Template matching condition 2]
label: Matching condition 2
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
tooltip: This pulse will only be outputted if both of the selected template matches yield a positive result.
state_quant: Port 1 - def 1 - Template matching condition 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

[Port 1 - def 1 - Template matching condition 2 quadrature]
label: Condition 2 - quadrature
datatype: COMBO
group: Pulse definition 1
section: Port 1 sequence
combo_def_1: I
combo_def_2: Q
state_quant: Port 1 - def 1 - Template matching condition 2
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Port 1 - def 2 - template]
label: Envelope
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
state_quant: Pulses for port 1
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16

[Port 1 - def 2 - repeat count]
label: Pulse repeat count
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
set_cmd: int
def_value: 1
low_lim: 1
state_quant: Pulses for port 1
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16

[Port 1 - def 2 - start times]
label: Start times
datatype: STRING
group: Pulse definition 2
section: Port 1 sequence
set_cmd: time_string, list
unit: s
def_value: 0 + 0*i
tooltip: Example: 100E6 + 50E6*i, 700E6, ...
state_quant: Pulses for port 1
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16

[Port 1 - def 2 - sine generator]
label: Sine generator (DRAG)
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: DRAG
combo_def_4: None
state_quant: Pulses for port 1
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16
tooltip: Choose which sine generator to output this pulse on, or configure DRAG over both. If set to None, the Frequency and Phase parameters will have no effect on this pulse.

[Port 1 - def 2 - DRAG sibling port]
label: DRAG sibling port
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: 2
combo_def_2: 3
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
combo_def_7: 8
state_quant: Port 1 - def 2 - sine generator
state_value_1: DRAG

[Port 1 - def 2 - DRAG phase shift]
label: Sibling phase shift
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - def 2 - sine generator
state_value_1: DRAG

[Port 1 - def 2 - DRAG scale]
label: DRAG scale
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
def_value: 1e-09
unit: s
state_quant: Port 1 - def 2 - sine generator
state_value_1: DRAG

[Port 1 - def 2 - DRAG detuning frequency]
label: DRAG detuning frequency
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
unit: Hz
low_lim: 0
state_quant: Port 1 - def 2 - sine generator
state_value_1: DRAG

[Port 1 - def 2 - Sweep param]
label: Sweepable parameter
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: None
combo_def_2: Amplitude scale
combo_def_3: Carrier frequency
combo_def_4: Phase
state_quant: Port 1 - def 2 - sine generator
state_value_1: 1
state_value_2: 2
state_value_3: DRAG
state_value_4: None

[Port 1 - def 2 - amp]
label: Amplitude scale
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
low_lim: -1
high_lim: 1
def_value: 1
state_quant: Port 1 - def 2 - Sweep param
state_value_1: None
state_value_2: Carrier frequency
state_value_3: Phase

[Port 1 - def 2 - freq]
label: Carrier frequency
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
unit: Hz
low_lim: 0
high_lim: 2000000000.0
state_quant: Port 1 - def 2 - Sweep param
state_value_1: None
state_value_2: Amplitude scale
state_value_3: Phase

[Port 1 - def 2 - phase]
label: Phase
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - def 2 - Sweep param
state_value_1: None
state_value_2: Amplitude scale
state_value_3: Carrier frequency

[Port 1 - def 2 - Sweep format]
label: Sweep format
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: Linear: Start-End
combo_def_2: Linear: Center-Span
combo_def_3: Custom
state_quant: Port 1 - def 2 - Sweep param
state_value_1: Amplitude scale
state_value_2: Carrier frequency
state_value_3: Phase

[Port 1 - def 2 - Sweep linear start]
label: Start
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
state_quant: Port 1 - def 2 - Sweep format
state_value_1: Linear: Start-End

[Port 1 - def 2 - Sweep linear end]
label: End
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
state_quant: Port 1 - def 2 - Sweep format
state_value_1: Linear: Start-End

[Port 1 - def 2 - Sweep linear center]
label: Center
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
state_quant: Port 1 - def 2 - Sweep format
state_value_1: Linear: Center-Span

[Port 1 - def 2 - Sweep linear span]
label: Span
datatype: DOUBLE
group: Pulse definition 2
section: Port 1 sequence
state_quant: Port 1 - def 2 - Sweep format
state_value_1: Linear: Center-Span

[Port 1 - def 2 - Sweep custom steps]
label: Step values
datatype: STRING
group: Pulse definition 2
section: Port 1 sequence
tooltip: Separate with comma
set_cmd: number_string, list
state_quant: Port 1 - def 2 - Sweep format
state_value_1: Custom

[Port 1 - def 2 - Template matching condition 1]
label: Matching condition 1
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
tooltip: This pulse will only be outputted if the selected template matching yields a positive result.
state_quant: Pulses for port 1
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16

[Port 1 - def 2 - Template matching condition 1 quadrature]
label: Condition 1 - quadrature
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: I
combo_def_2: Q
state_quant: Port 1 - def 2 - Template matching condition 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Port 1 - def 2 - Template matching condition 2]
label: Matching condition 2
datatype: COMBO
group: Pulse definition 2
section: Port 1 sequence
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
tooltip: This pulse will only be outputted if both of the selected template matches yield a positive result.
state_quant: Port 1 - def 2 - Template matching condition 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

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

[Port 1 - def 3 - template]
label: Envelope
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
state_quant: Pulses for port 1
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16

[Port 1 - def 3 - repeat count]
label: Pulse repeat count
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
set_cmd: int
def_value: 1
low_lim: 1
state_quant: Pulses for port 1
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16

[Port 1 - def 3 - start times]
label: Start times
datatype: STRING
group: Pulse definition 3
section: Port 1 sequence
set_cmd: time_string, list
unit: s
def_value: 0 + 0*i
tooltip: Example: 100E6 + 50E6*i, 700E6, ...
state_quant: Pulses for port 1
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16

[Port 1 - def 3 - sine generator]
label: Sine generator (DRAG)
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: DRAG
combo_def_4: None
state_quant: Pulses for port 1
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16
tooltip: Choose which sine generator to output this pulse on, or configure DRAG over both. If set to None, the Frequency and Phase parameters will have no effect on this pulse.

[Port 1 - def 3 - DRAG sibling port]
label: DRAG sibling port
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: 2
combo_def_2: 3
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
combo_def_7: 8
state_quant: Port 1 - def 3 - sine generator
state_value_1: DRAG

[Port 1 - def 3 - DRAG phase shift]
label: Sibling phase shift
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - def 3 - sine generator
state_value_1: DRAG

[Port 1 - def 3 - DRAG scale]
label: DRAG scale
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
def_value: 1e-09
unit: s
state_quant: Port 1 - def 3 - sine generator
state_value_1: DRAG

[Port 1 - def 3 - DRAG detuning frequency]
label: DRAG detuning frequency
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
unit: Hz
low_lim: 0
state_quant: Port 1 - def 3 - sine generator
state_value_1: DRAG

[Port 1 - def 3 - Sweep param]
label: Sweepable parameter
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: None
combo_def_2: Amplitude scale
combo_def_3: Carrier frequency
combo_def_4: Phase
state_quant: Port 1 - def 3 - sine generator
state_value_1: 1
state_value_2: 2
state_value_3: DRAG
state_value_4: None

[Port 1 - def 3 - amp]
label: Amplitude scale
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
low_lim: -1
high_lim: 1
def_value: 1
state_quant: Port 1 - def 3 - Sweep param
state_value_1: None
state_value_2: Carrier frequency
state_value_3: Phase

[Port 1 - def 3 - freq]
label: Carrier frequency
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
unit: Hz
low_lim: 0
high_lim: 2000000000.0
state_quant: Port 1 - def 3 - Sweep param
state_value_1: None
state_value_2: Amplitude scale
state_value_3: Phase

[Port 1 - def 3 - phase]
label: Phase
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 1 - def 3 - Sweep param
state_value_1: None
state_value_2: Amplitude scale
state_value_3: Carrier frequency

[Port 1 - def 3 - Sweep format]
label: Sweep format
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: Linear: Start-End
combo_def_2: Linear: Center-Span
combo_def_3: Custom
state_quant: Port 1 - def 3 - Sweep param
state_value_1: Amplitude scale
state_value_2: Carrier frequency
state_value_3: Phase

[Port 1 - def 3 - Sweep linear start]
label: Start
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
state_quant: Port 1 - def 3 - Sweep format
state_value_1: Linear: Start-End

[Port 1 - def 3 - Sweep linear end]
label: End
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
state_quant: Port 1 - def 3 - Sweep format
state_value_1: Linear: Start-End

[Port 1 - def 3 - Sweep linear center]
label: Center
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
state_quant: Port 1 - def 3 - Sweep format
state_value_1: Linear: Center-Span

[Port 1 - def 3 - Sweep linear span]
label: Span
datatype: DOUBLE
group: Pulse definition 3
section: Port 1 sequence
state_quant: Port 1 - def 3 - Sweep format
state_value_1: Linear: Center-Span

[Port 1 - def 3 - Sweep custom steps]
label: Step values
datatype: STRING
group: Pulse definition 3
section: Port 1 sequence
tooltip: Separate with comma
set_cmd: number_string, list
state_quant: Port 1 - def 3 - Sweep format
state_value_1: Custom

[Port 1 - def 3 - Template matching condition 1]
label: Matching condition 1
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
tooltip: This pulse will only be outputted if the selected template matching yields a positive result.
state_quant: Pulses for port 1
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16

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

[Port 1 - def 3 - Template matching condition 2]
label: Matching condition 2
datatype: COMBO
group: Pulse definition 3
section: Port 1 sequence
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
tooltip: This pulse will only be outputted if both of the selected template matches yield a positive result.
state_quant: Port 1 - def 3 - Template matching condition 1
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16

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

[Port 2 - mode]
label: Mode
datatype: COMBO
group: General
section: Port 2 sequence
combo_def_1: Disabled
combo_def_2: Define
combo_def_3: Copy

[Port 2 - copy sequence from]
label: Copy from port
datatype: COMBO
group: General
section: Port 2 sequence
combo_def_1: 1
combo_def_2: 3
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
combo_def_7: 8
state_quant: Port 2 - mode
state_value_1: Copy

[Port 2 - phase shift]
label: Phase shift
datatype: DOUBLE
group: General
section: Port 2 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 2 - mode
state_value_1: Copy

[Port 2 - amplitude scale multiplier]
label: Amplitude scale multiplier
datatype: DOUBLE
group: General
section: Port 2 sequence
def_value: 1
state_quant: Port 2 - mode
state_value_1: Copy

[Port 2 - DC bias]
label: DC bias
datatype: DOUBLE
group: General
section: Port 2 sequence
low_lim: -0.05
high_lim: 0.05
unit: V
tooltip: Range -50mV to +50mV
state_quant: Port 2 - mode
state_value_1: Copy
state_value_2: Define
### Number of pulses for port 2 

[Pulses for port 2]
label: Number of unique pulses
datatype: COMBO
group: General
section: Port 2 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
state_quant: Port 2 - mode
state_value_1: Define

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

[Port 3 - mode]
label: Mode
datatype: COMBO
group: General
section: Port 3 sequence
combo_def_1: Disabled
combo_def_2: Define
combo_def_3: Copy

[Port 3 - copy sequence from]
label: Copy from port
datatype: COMBO
group: General
section: Port 3 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 4
combo_def_4: 5
combo_def_5: 6
combo_def_6: 7
combo_def_7: 8
state_quant: Port 3 - mode
state_value_1: Copy

[Port 3 - phase shift]
label: Phase shift
datatype: DOUBLE
group: General
section: Port 3 sequence
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Port 3 - mode
state_value_1: Copy

[Port 3 - amplitude scale multiplier]
label: Amplitude scale multiplier
datatype: DOUBLE
group: General
section: Port 3 sequence
def_value: 1
state_quant: Port 3 - mode
state_value_1: Copy

[Port 3 - DC bias]
label: DC bias
datatype: DOUBLE
group: General
section: Port 3 sequence
low_lim: -0.05
high_lim: 0.05
unit: V
tooltip: Range -50mV to +50mV
state_quant: Port 3 - mode
state_value_1: Copy
state_value_2: Define
### Number of pulses for port 3 

[Pulses for port 3]
label: Number of unique pulses
datatype: COMBO
group: General
section: Port 3 sequence
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
state_quant: Port 3 - mode
state_value_1: Define

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### SAMPLING ##################
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

[Sampling - start times]
label: Start times
datatype: STRING
group: Timing
section: Sampling
set_cmd: time_string, list
unit: s
def_value: 0 + 0*i
tooltip: Example: 100E6 + 50E6*i, 700E6, ...

[Sampling - duration]
label: Duration
datatype: DOUBLE
group: Timing
section: Sampling
low_lim: 0
high_lim: 4.096e-06
unit: s

[Sampling on port 1]
label: Port 1
datatype: BOOLEAN
group: Port selection
section: Sampling

[Sampling on port 2]
label: Port 2
datatype: BOOLEAN
group: Port selection
section: Sampling

[Sampling on port 3]
label: Port 3
datatype: BOOLEAN
group: Port selection
section: Sampling

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

[Port 1: Time trace]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
get_cmd: get_trace
x_unit: s
state_quant: Sampling on port 1
state_value_1: True
show_in_measurement_dlg: True 

[Port 2: Time trace]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
get_cmd: get_trace
x_unit: s
state_quant: Sampling on port 2
state_value_1: True
show_in_measurement_dlg: True 

[Port 3: Time trace]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
get_cmd: get_trace
x_unit: s
state_quant: Sampling on port 3
state_value_1: True
show_in_measurement_dlg: True 

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

[Custom template 1]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
permission: WRITE

[Custom template 2]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
permission: WRITE

[Custom template 3]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
permission: WRITE

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

[Template 1: Preview]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
get_cmd: template_preview
x_unit: s
state_quant: Envelope template 1: shape
state_value_1: Square
state_value_2: Long drive
state_value_3: Sin2
state_value_4: SinP
state_value_5: Sinc
state_value_6: Triangle
state_value_7: Gaussian
state_value_8: Cool
state_value_9: Custom 1
state_value_10: Custom 2
state_value_11: Custom 3
state_value_12: Custom 4
state_value_13: Custom 5
state_value_14: Custom 6
state_value_15: Custom 7
state_value_16: Custom 8

[Template 2: Preview]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
get_cmd: template_preview
x_unit: s
state_quant: Envelope template 2: shape
state_value_1: Square
state_value_2: Long drive
state_value_3: Sin2
state_value_4: SinP
state_value_5: Sinc
state_value_6: Triangle
state_value_7: Gaussian
state_value_8: Cool
state_value_9: Custom 1
state_value_10: Custom 2
state_value_11: Custom 3
state_value_12: Custom 4
state_value_13: Custom 5
state_value_14: Custom 6
state_value_15: Custom 7
state_value_16: Custom 8

[Template 3: Preview]
label: 
datatype: VECTOR
group: Port selection
section: Sampling
get_cmd: template_preview
x_unit: s
state_quant: Envelope template 3: shape
state_value_1: Square
state_value_2: Long drive
state_value_3: Sin2
state_value_4: SinP
state_value_5: Sinc
state_value_6: Triangle
state_value_7: Gaussian
state_value_8: Cool
state_value_9: Custom 1
state_value_10: Custom 2
state_value_11: Custom 3
state_value_12: Custom 4
state_value_13: Custom 5
state_value_14: Custom 6
state_value_15: Custom 7
state_value_16: Custom 8

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### TEMPLATE MATCHING #########
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

[Number of matches]
label: Number of matches
datatype: COMBO
group: General
section: Template matching
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8

[Template matching 1 - template 1]
label: Template 1
datatype: COMBO
group: Matching 1
section: Template matching
combo_def_1: Square
combo_def_2: Sin2
combo_def_3: Triangle
combo_def_4: Custom 1
combo_def_5: Custom 2
combo_def_6: Custom 3
combo_def_7: Custom 4
combo_def_8: Custom 5
combo_def_9: Custom 6
combo_def_10: Custom 7
combo_def_11: Custom 8
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: The template to match against. The envelope given will be modulated with the frequency you specify further below.

[Template matching 1 - sampling I port]
label: Sampling I port
datatype: COMBO
group: Matching 1
section: Template matching
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Template matching 1 - sampling Q port]
label: Sampling Q port
datatype: COMBO
group: Matching 1
section: Template matching
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 2
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Template matching 1 - matching start time]
label: Matching start time
datatype: DOUBLE
group: Matching 1
section: Template matching
low_lim: 0
unit: s
set_cmd: quarter_nanos
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: The time at which matching should start.

[Template matching 1 - matching duration]
label: Matching duration
datatype: DOUBLE
group: Matching 1
section: Template matching
low_lim: 0
high_lim: 1.02e-06
unit: s
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: How long matching should last. Should ideally be equal to the duration of the pulse you match with.

[Template matching 1 - pulse I port]
label: Pulse I port
datatype: COMBO
group: Matching 1
section: Template matching
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Template matching 1 - pulse Q port]
label: Pulse Q port
datatype: COMBO
group: Matching 1
section: Template matching
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 2
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8

[Template matching 1 - pulse start time]
label: Pulse start time
datatype: DOUBLE
group: Matching 1
section: Template matching
low_lim: 0
unit: s
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: The start time of the pulse you match with. Used to calculate phase sync for the matching template.

[Template matching 1 - pulse frequency]
label: Pulse frequency
datatype: DOUBLE
group: Matching 1
section: Template matching
unit: Hz
low_lim: 0
high_lim: 2000000000.0
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: Frequency to modulate the matching template with. Should ideally be equal to the frequency of the pulse you match with.

[Template matching 1 - pulse phase]
label: Pulse phase
datatype: DOUBLE
group: Matching 1
section: Template matching
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: Phase offset to apply to the matching template. Should be equal to the phase offset of the pulse you match with.

[Template matching 1 - Q port phase adjustment]
label: Q port phase adjustment
datatype: DOUBLE
group: Matching 1
section: Template matching
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: This value will be added to the Q port's phase to account for phase shifts caused by the mixers.

[Template matching 1 - I port amplitude scale multiplier]
label: I port amplitude scale multiplier
datatype: DOUBLE
group: Matching 1
section: Template matching
def_value: 1
low_lim: 0
high_lim: 1
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: This value will be used to scale the matching template to the amplitude of the I port's output.

[Template matching 1 - Q port amplitude scale multiplier]
label: Q port amplitude scale multiplier
datatype: DOUBLE
group: Matching 1
section: Template matching
def_value: 1
low_lim: 0
high_lim: 1
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
tooltip: This value will be used to scale the matching template to the amplitude of the Q port's output.

[Template matching 1: Results]
label: 
datatype: VECTOR_COMPLEX
group: Matching 1
section: Template matching
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
get_cmd: get_match
permission: READ

[Template matching 2 - template 1]
label: Template 1
datatype: COMBO
group: Matching 2
section: Template matching
combo_def_1: Square
combo_def_2: Sin2
combo_def_3: Triangle
combo_def_4: Custom 1
combo_def_5: Custom 2
combo_def_6: Custom 3
combo_def_7: Custom 4
combo_def_8: Custom 5
combo_def_9: Custom 6
combo_def_10: Custom 7
combo_def_11: Custom 8
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: The template to match against. The envelope given will be modulated with the frequency you specify further below.

[Template matching 2 - sampling I port]
label: Sampling I port
datatype: COMBO
group: Matching 2
section: Template matching
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8

[Template matching 2 - sampling Q port]
label: Sampling Q port
datatype: COMBO
group: Matching 2
section: Template matching
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 2
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8

[Template matching 2 - matching start time]
label: Matching start time
datatype: DOUBLE
group: Matching 2
section: Template matching
low_lim: 0
unit: s
set_cmd: quarter_nanos
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: The time at which matching should start.

[Template matching 2 - matching duration]
label: Matching duration
datatype: DOUBLE
group: Matching 2
section: Template matching
low_lim: 0
high_lim: 1.02e-06
unit: s
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: How long matching should last. Should ideally be equal to the duration of the pulse you match with.

[Template matching 2 - pulse I port]
label: Pulse I port
datatype: COMBO
group: Matching 2
section: Template matching
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8

[Template matching 2 - pulse Q port]
label: Pulse Q port
datatype: COMBO
group: Matching 2
section: Template matching
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 2
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8

[Template matching 2 - pulse start time]
label: Pulse start time
datatype: DOUBLE
group: Matching 2
section: Template matching
low_lim: 0
unit: s
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: The start time of the pulse you match with. Used to calculate phase sync for the matching template.

[Template matching 2 - pulse frequency]
label: Pulse frequency
datatype: DOUBLE
group: Matching 2
section: Template matching
unit: Hz
low_lim: 0
high_lim: 2000000000.0
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: Frequency to modulate the matching template with. Should ideally be equal to the frequency of the pulse you match with.

[Template matching 2 - pulse phase]
label: Pulse phase
datatype: DOUBLE
group: Matching 2
section: Template matching
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: Phase offset to apply to the matching template. Should be equal to the phase offset of the pulse you match with.

[Template matching 2 - Q port phase adjustment]
label: Q port phase adjustment
datatype: DOUBLE
group: Matching 2
section: Template matching
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: This value will be added to the Q port's phase to account for phase shifts caused by the mixers.

[Template matching 2 - I port amplitude scale multiplier]
label: I port amplitude scale multiplier
datatype: DOUBLE
group: Matching 2
section: Template matching
def_value: 1
low_lim: 0
high_lim: 1
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: This value will be used to scale the matching template to the amplitude of the I port's output.

[Template matching 2 - Q port amplitude scale multiplier]
label: Q port amplitude scale multiplier
datatype: DOUBLE
group: Matching 2
section: Template matching
def_value: 1
low_lim: 0
high_lim: 1
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
tooltip: This value will be used to scale the matching template to the amplitude of the Q port's output.

[Template matching 2: Results]
label: 
datatype: VECTOR_COMPLEX
group: Matching 2
section: Template matching
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
get_cmd: get_match
permission: READ

[Template matching 3 - template 1]
label: Template 1
datatype: COMBO
group: Matching 3
section: Template matching
combo_def_1: Square
combo_def_2: Sin2
combo_def_3: Triangle
combo_def_4: Custom 1
combo_def_5: Custom 2
combo_def_6: Custom 3
combo_def_7: Custom 4
combo_def_8: Custom 5
combo_def_9: Custom 6
combo_def_10: Custom 7
combo_def_11: Custom 8
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: The template to match against. The envelope given will be modulated with the frequency you specify further below.

[Template matching 3 - sampling I port]
label: Sampling I port
datatype: COMBO
group: Matching 3
section: Template matching
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8

[Template matching 3 - sampling Q port]
label: Sampling Q port
datatype: COMBO
group: Matching 3
section: Template matching
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 2
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8

[Template matching 3 - matching start time]
label: Matching start time
datatype: DOUBLE
group: Matching 3
section: Template matching
low_lim: 0
unit: s
set_cmd: quarter_nanos
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: The time at which matching should start.

[Template matching 3 - matching duration]
label: Matching duration
datatype: DOUBLE
group: Matching 3
section: Template matching
low_lim: 0
high_lim: 1.02e-06
unit: s
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: How long matching should last. Should ideally be equal to the duration of the pulse you match with.

[Template matching 3 - pulse I port]
label: Pulse I port
datatype: COMBO
group: Matching 3
section: Template matching
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8

[Template matching 3 - pulse Q port]
label: Pulse Q port
datatype: COMBO
group: Matching 3
section: Template matching
combo_def_1: None
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 2
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8

[Template matching 3 - pulse start time]
label: Pulse start time
datatype: DOUBLE
group: Matching 3
section: Template matching
low_lim: 0
unit: s
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: The start time of the pulse you match with. Used to calculate phase sync for the matching template.

[Template matching 3 - pulse frequency]
label: Pulse frequency
datatype: DOUBLE
group: Matching 3
section: Template matching
unit: Hz
low_lim: 0
high_lim: 2000000000.0
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: Frequency to modulate the matching template with. Should ideally be equal to the frequency of the pulse you match with.

[Template matching 3 - pulse phase]
label: Pulse phase
datatype: DOUBLE
group: Matching 3
section: Template matching
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: Phase offset to apply to the matching template. Should be equal to the phase offset of the pulse you match with.

[Template matching 3 - Q port phase adjustment]
label: Q port phase adjustment
datatype: DOUBLE
group: Matching 3
section: Template matching
unit: PI rad
low_lim: -2
high_lim: 2
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: This value will be added to the Q port's phase to account for phase shifts caused by the mixers.

[Template matching 3 - I port amplitude scale multiplier]
label: I port amplitude scale multiplier
datatype: DOUBLE
group: Matching 3
section: Template matching
def_value: 1
low_lim: 0
high_lim: 1
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: This value will be used to scale the matching template to the amplitude of the I port's output.

[Template matching 3 - Q port amplitude scale multiplier]
label: Q port amplitude scale multiplier
datatype: DOUBLE
group: Matching 3
section: Template matching
def_value: 1
low_lim: 0
high_lim: 1
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
tooltip: This value will be used to scale the matching template to the amplitude of the Q port's output.

[Template matching 3: Results]
label: 
datatype: VECTOR_COMPLEX
group: Matching 3
section: Template matching
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
get_cmd: get_match
permission: READ

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

[Template matching 1: Average result]
label: Average 1
datatype: COMPLEX
group: Averages (read-only)
section: Template matching
state_quant: Number of matches
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
permission: READ
get_cmd: get_match

[Template matching 2: Average result]
label: Average 2
datatype: COMPLEX
group: Averages (read-only)
section: Template matching
state_quant: Number of matches
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
permission: READ
get_cmd: get_match

[Template matching 3: Average result]
label: Average 3
datatype: COMPLEX
group: Averages (read-only)
section: Template matching
state_quant: Number of matches
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
permission: READ
get_cmd: get_match

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### PREVIEW ###################
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

[Preview port]
label: Preview sequence on port
datatype: COMBO
group: Settings
section: Preview
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
set_cmd: not_affecting_board

[Preview iteration]
label: Preview iteration
datatype: DOUBLE
group: Settings
section: Preview
def_value: 1
low_lim: 1
set_cmd: int, not_affecting_board

[Enable preview slicing]
label: Enable preview slicing
datatype: BOOLEAN
group: Settings
section: Preview
tooltip: This will let you specify which segment of the pulse sequence to preview.
set_cmd: not_affecting_board

[Preview slice start]
label: Slice start
datatype: DOUBLE
group: Settings
section: Preview
unit: s
low_lim: 0
state_quant: Enable preview slicing
state_value_1: True
set_cmd: not_affecting_board

[Preview slice end]
label: Slice end
datatype: DOUBLE
group: Settings
section: Preview
unit: s
low_lim: 1e-09
def_value: 1e-09
state_quant: Enable preview slicing
state_value_1: True
set_cmd: not_affecting_board

[Preview sample windows]
label: Preview sample windows
datatype: BOOLEAN
group: Settings
section: Preview
tooltip: This will display sample windows as flat lines at y=-0.1. Output pulses that overlap with these sample windows will be hidden.
set_cmd: not_affecting_board

[Pulse sequence preview]
label: 
datatype: VECTOR
group: Settings
section: Preview
get_cmd: sequence_preview
permission: READ

[Enable Vivace call logging]
label: Enable Vivace call logging
datatype: BOOLEAN
group: Logging
section: Debug
set_cmd: not_affecting_board

[Log file name]
label: Log file name
datatype: STRING
group: Logging
section: Debug
state_quant: Enable Vivace call logging
state_value_1: True
def_value: log
set_cmd: not_affecting_board

[Overwrite previous log]
label: Overwrite previous log
datatype: BOOLEAN
group: Logging
section: Debug
state_quant: Enable Vivace call logging
state_value_1: True
def_value: True
set_cmd: not_affecting_board

[Vivace connection enabled]
label: Enable connection to Vivace
datatype: BOOLEAN
group: Dry run
section: Debug
def_value: True
set_cmd: vivace_connect
tooltip: When disabled, ViPS will not send any data to the Vivace hardware. All output will default to dummy values.

[ViPS version]
label: ViPS
datatype: STRING
group: Versions
section: Debug
set_cmd: vips_version

[Vivace firmware version]
label: Vivace firmware
datatype: STRING
group: Versions
section: Debug
set_cmd: vivace_fw_version

[Vivace server version]
label: Vivace server
datatype: STRING
group: Versions
section: Debug
set_cmd: vivace_server_version

[Vivace API version]
label: Vivace API
datatype: STRING
group: Versions
section: Debug
set_cmd: vivace_api_version
